<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>Bonsai\SessiontTrialParameters\LedStimulus.csv</io:FileName>
              <io:ListSeparator>;</io:ListSeparator>
              <io:ScanPattern>%B</io:ScanPattern>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>34</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="p1:RgbArrayCommand">
              <p1:Type>Update64</p1:Type>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>ledOffCommand</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>trialType</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>ReadTrialParameters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>Bonsai\SessiontTrialParameters\trial_timeline.csv</io:FileName>
              <io:ListSeparator>;</io:ListSeparator>
              <io:ScanPattern>%i</io:ScanPattern>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>ShowStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>RGBLedStimulus</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>trialType</Name>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\EnableDisableChannel.bonsai" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>AudioSwitchCommands</Name>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="rx:DistinctUntilChanged" />
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Description />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="NotEqual">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Payload" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Address>32</harp:Address>
                      <harp:PayloadType>U16</harp:PayloadType>
                      <harp:Payload>3</harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoundCard Commands</Name>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>4</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Payload" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Address>34</harp:Address>
                      <harp:PayloadType>U16</harp:PayloadType>
                      <harp:Payload>0</harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoundCard Commands</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvReader">
                    <io:FileName>Bonsai\SessiontTrialParameters\LedStimulus.csv</io:FileName>
                    <io:ListSeparator>;</io:ListSeparator>
                    <io:ScanPattern>%B</io:ScanPattern>
                    <io:SkipRows>1</io:SkipRows>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RGBLedStimulus</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Description />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="NotEqual">
                          <Operand xsi:type="IntProperty">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Index" />
                  <Expression xsi:type="p1:RgbArrayCommand">
                    <p1:Type>Update64</p1:Type>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>RGBLedCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="1" To="11" Label="Source1" />
                  <Edge From="1" To="17" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="27" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>CheckGoNoGo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Licking</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>2</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>NoGoResponse</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>CorrectRejection</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>trialType</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>CorrectRejection</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>TimeOut</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>trialType</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>TimeOut</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Miss</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>GoResponse</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Hit</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>trialType</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>givereward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:RgbArrayCommand">
                    <p1:Type>SetOutput0</p1:Type>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>RGBLedCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:RgbArrayCommand">
                    <p1:Type>ClearOutput0</p1:Type>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>RGBLedCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Sink">
                <Name>giveReward</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="p1:RgbArrayCommand">
                      <p1:Type>SetOutput0</p1:Type>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>RGBLedCommands</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Sink">
                <Name>stopReward</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timer">
                        <rx:DueTime>PT0.5S</rx:DueTime>
                        <rx:Period>PT0S</rx:Period>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="p1:RgbArrayCommand">
                      <p1:Type>ClearOutput0</p1:Type>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>RGBLedCommands</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Timer">
                        <rx:DueTime>PT0S</rx:DueTime>
                        <rx:Period>PT0S</rx:Period>
                      </Combinator>
                    </Expression>
                  </Nodes>
                  <Edges>
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>HitTrial</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>FalseAlarm</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>trialType</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>TimeOut</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>FalseAlarm</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>ITI</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Licking</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="CreateObservable">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT2S</rx:DueTime>
                            <rx:Period>PT0S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>StimOFF</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ledOffCommand</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>RGBLedCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="22" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="19" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="19" Label="Source4" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="16" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="24" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Licking</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpDevices</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RGBLedCommands</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>SoundCard Commands</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>AudioSwitchCommands</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ClockSynchroCommands</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>BehaviorEvents</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="p1:BehaviorEvent">
                <p1:Type>AnalogInput</p1:Type>
                <p1:Mask>Digital2</p1:Mask>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:TimestampSubject.bonsai">
              <Name>Timestamp</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AudioSwitchCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>Off</harp:LedState>
                <harp:VisualIndicators>Off</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM9</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:MulticastTimestamp.bonsai">
              <Name>Timestamp</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>AudioSwitchEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>harpRegisters\AudioSwitch.bin</dsp:Path>
                  <dsp:Suffix>Timestamp</dsp:Suffix>
                  <dsp:Overwrite>false</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>SoundCard Commands</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="harp:Device">
                  <harp:DeviceState>Active</harp:DeviceState>
                  <harp:DumpRegisters>true</harp:DumpRegisters>
                  <harp:LedState>Off</harp:LedState>
                  <harp:VisualIndicators>Off</harp:VisualIndicators>
                  <harp:Heartbeat>Disable</harp:Heartbeat>
                  <harp:IgnoreErrors>false</harp:IgnoreErrors>
                  <harp:PortName>COM8</harp:PortName>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="Bonsai.Harp:MulticastTimestamp.bonsai">
                <Name>Timestamp</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="BehaviorSubject">
                <Name>SoundCardEvents</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>MessageBytes</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>harpRegisters\SoundCard.bin</dsp:Path>
                  <dsp:Suffix>Timestamp</dsp:Suffix>
                  <dsp:Overwrite>false</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ClockSynchroCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>Off</harp:LedState>
                <harp:VisualIndicators>Off</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM10</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:MulticastTimestamp.bonsai">
              <Name>Timestamp</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>ClockSynchroEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>ClockSynchro.bin</dsp:Path>
                  <dsp:Suffix>Timestamp</dsp:Suffix>
                  <dsp:Overwrite>false</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RGBLedCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM11</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:MulticastTimestamp.bonsai">
              <Name>Timestamp</Name>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>RGBLedEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>harpRegisters\RGBLed.bin</dsp:Path>
                  <dsp:Suffix>Timestamp</dsp:Suffix>
                  <dsp:Overwrite>false</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Licking</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>